CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Isotype>.*)_(?P<Antibody>.*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\(?P<Slidename>.*)\\(?P<Region>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (or (file does contain "DNA1"))
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DNA3")
    Name to assign these images:DNA3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:400
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AllDNA
    Image or measurement?:Image
    Select the first image:DNA1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNA3
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:AllDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,9
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:AllDNA
    Number of pixels by which to expand the primary objects:2
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Nuclei
    Name the output image:nucleiImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cells
    Name the output image:cellImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:Cytoplasm
    Name the output image:cytoplasmImage
    Select the color format:Grayscale
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:nucleiImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<Slidename>_\g<Region>_Nuclei_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:cellImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<Slidename>_\g<Region>_Cell_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:cytoplasmImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<Slidename>_\g<Region>_Cytoplasm_mask
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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